includeFile = DosimeterChemComp.txt

 
s:Gr/ViewA/Type             = "OpenGL"
d:Gr/ViewA/Theta       = 45. deg
d:Gr/ViewA/Phi         = 45. deg

##############################################
###               TOPAS SETUP              ###
##############################################


i:Ts/ShowHistoryCountAtInterval         = 5000
i:Ts/NumberOfThreads                    = 0 # 0 for using all cores, -1 for all but one
b:Ts/DumpParameters                     = "False"

 

##############################################
###              WORLD SETUP               ###
##############################################


s:Ge/World/Type            = "TsBox"
s:Ge/World/Material        = "Air"  
d:Ge/World/HLX             = 50. cm
d:Ge/World/HLY             = 50. cm
d:Ge/World/HLZ             = 50. cm
b:Ge/World/Invisible       = "True"

 

##############################################
###              GEOMETRY                  ###
##############################################


s:Ge/Patient/Parent                  = "World"
s:Ge/Patient/Type                    = "TsBox"
s:Ge/Patient/Material                = "FlexDos"
d:Ge/Patient/HLX		     = 25 mm
d:Ge/Patient/HLY		     = 25 mm
d:Ge/Patient/HLZ		     = 50 mm
d:Ge/Patient/TransX       = -0 mm
d:Ge/Patient/TransY       = -0 mm
d:Ge/Patient/TransZ       = -60.0 mm
i:Ge/Patient/XBins		 = 100
i:Ge/Patient/YBins		 = 100
i:Ge/Patient/ZBins		 = 200
s:Ge/water_slab/Parent                  = "World"
s:Ge/water_slab/Type                    = "TsBox"
s:Ge/water_slab/Material                = "G4_WATER"
d:Ge/water_slab/HLX		     = 25 mm
d:Ge/water_slab/HLY		     = 25 mm
d:Ge/water_slab/HLZ		     = 5.0 mm
d:Ge/water_slab/TransZ       = -5.0 mm

 

s:Ge/IsocenterMarker/Parent	     = "World"
s:Ge/IsocenterMarker/Type	     = "TsBox"
b:Ge/IsocenterMarker/IsParallel	     = "True"
d:Ge/IsocenterMarker/HLX		     = 0.1 cm
d:Ge/IsocenterMarker/HLY		     = 0.1 cm
d:Ge/IsocenterMarker/HLZ		     = 0.1 cm
s:Ge/IsocenterMarker/Color	= "Yellow"

 

s:Ge/BeamPosition/Parent             = "World"
s:Ge/DCM_to_IEC/Type                 = "Group"
d:Ge/BeamPosition/TransZ             = 0.0 mm

 

##############################################
###                BEAM                    ###
##############################################


s:So/Field/Type                      = "Emittance"
s:So/Field/Component                 = "BeamPosition"
s:So/Field/BeamParticle              = "proton"
d:So/Field/BeamEnergy                = 76.06318533333332 MeV
u:So/Field/BeamEnergySpread          = 1.1749475 
s:So/Field/Distribution              = "BiGaussian"
d:So/Field/SigmaX                    = 4.3855 mm
u:So/Field/SigmaXprime               = 0.0058 
d:So/Field/SigmaY                    = 3.5665 mm
u:So/Field/SigmaYprime               = 0.0053 
u:So/Field/CorrelationX              = 0.27913303637771814 
u:So/Field/CorrelationY              = 0.7221286129575795 
i:So/Field/NumberOfHistoriesInRun    = 5000000

 

##############################################
###            SCORER SETUP                ###
##############################################


s:Sc/Dose/Quantity                             = "DoseToWater"
s:Sc/Dose/Component                            = "Patient"
s:Sc/Dose/IfOutputFileAlreadyExists            = "Overwrite"
b:Sc/Dose/PreCalculateStoppingPowerRatios      = "True"
d:Sc/Dose/MinProtonEnergyForStoppingPowerRatio = 0.0 MeV
d:Sc/Dose/MaxProtonEnergyForStoppingPowerRatio = 250.0 MeV
s:Sc/Dose/OutputFile                           = "75mev_output/dose"

 

s:Sc/Fluence/Quantity                             = "Fluence"
s:Sc/Fluence/Component                            = "Patient"
s:Sc/Fluence/IfOutputFileAlreadyExists            = "Overwrite"
b:Sc/Fluence/PreCalculateStoppingPowerRatios      = "True"
d:Sc/Fluence/MinProtonEnergyForStoppingPowerRatio = 0.0 MeV
d:Sc/Fluence/MaxProtonEnergyForStoppingPowerRatio = 250.0 MeV
s:Sc/Fluence/OutputFile                           = "75mev_output/fluence"

 

s:Sc/LET_f/Quantity                             = "ProtonLET"
s:Sc/LET_f/WeightBy                             = "Track"
s:Sc/LET_f/Component                            = "Patient"
s:Sc/LET_f/IfOutputFileAlreadyExists            = "Overwrite"
s:Sc/LET_f/OutputFile                           = "75mev_output/let"

 

#Total number of simulated particles is 5000000
#Total number of particles scaled down by 0.0011554289165057882
