##############################################
###           V A R I A B L E S            ###
##############################################
includeFile                          = DosimeterChemComp.txt

d:Rt/Plan/IsoCenterX                 = 1.02 mm
d:Rt/Plan/IsoCenterY                 = 2.55 mm
d:Rt/Plan/IsoCenterZ                 = -0.68 mm
d:Ge/snoutPosition                   = 72.54 mm
d:Ge/gantryAngle                     = 90.00 deg
d:Ge/couchAngle                      = 0.00 deg
dc:Ge/Patient/DicomOriginX           = 0.00 mm
dc:Ge/Patient/DicomOriginY           = 0.00 mm
dc:Ge/Patient/DicomOriginZ           = 0.00 mm

##############################################
###         T O P A S    S E T U P         ###
##############################################
i:Ts/ShowHistoryCountAtInterval         = 5000
i:Ts/NumberOfThreads                    = 0 # 0 for using all cores, -1 for all but one
b:Ts/DumpParameters                     = "False"
b:Ge/Patient/IgnoreInconsistentFrameOfReferenceUID = "True"


##############################################
###         W O R L D    S E T U P         ###
##############################################
s:Ge/World/Type            = "TsBox"
s:Ge/World/Material        = "Air"
d:Ge/World/HLX             = 90. cm
d:Ge/World/HLY             = 90. cm
d:Ge/World/HLZ             = 90. cm
b:Ge/World/Invisible       = "True"


##############################################
###            G E O M E T R Y             ###
##############################################
s:Ge/Patient/Parent                  = "World"
s:Ge/Patient/Type                    = "TsBox"
d:Ge/Patient/HLY		     = 3.5 cm
d:Ge/Patient/HLZ		     = 3.5 cm
d:Ge/Patient/HLX		     = 3.5 cm
s:Ge/Patient/Material		     = "FlexDos"
d:Ge/Patient/TransX                  = -35 mm
d:Ge/Patient/TransY                  = Ge/Patient/DicomOriginY - Rt/Plan/IsoCenterY mm
d:Ge/Patient/TransZ                  = Ge/Patient/DicomOriginZ - Rt/Plan/IsoCenterZ mm
d:Ge/Patient/RotX                    = 0.00 deg
d:Ge/Patient/RotY                    = 0.00 deg
d:Ge/Patient/RotZ                    = 0.00 deg
s:Ge/Patient/Color                   = "Red"
i:Ge/Patient/XBins		     = 140
i:Ge/Patient/YBins		     = 140
i:Ge/Patient/ZBins		     = 140

s:Ge/IsocenterMarker/Parent	     = "World"
s:Ge/IsocenterMarker/Type	     = "TsBox"
b:Ge/IsocenterMarker/IsParallel	     = "True"
d:Ge/IsocenterMarker/HLY		     = 0.1 cm
d:Ge/IsocenterMarker/HLZ		     = 0.1 cm
d:Ge/IsocenterMarker/HLX		     = 0.1 cm
d:Ge/IsocenterMarker/TransX                  = Ge/Patient/DicomOriginX - Rt/Plan/IsoCenterX mm
d:Ge/IsocenterMarker/TransY                  = Ge/Patient/DicomOriginY - Rt/Plan/IsoCenterY mm
d:Ge/IsocenterMarker/TransZ                  = Ge/Patient/DicomOriginZ - Rt/Plan/IsoCenterZ mm
s:Ge/IsocenterMarker/Color	= "Yellow"


s:Ge/Gantry/Parent                   = "DCM_to_IEC"
s:Ge/Gantry/Type                     = "Group"
d:Ge/Gantry/TransX                   = 0.00 mm
d:Ge/Gantry/TransY                   = 0.00 mm
d:Ge/Gantry/TransZ                   = 0.00 mm
d:Ge/Gantry/RotX                     = 0.00 deg
d:Ge/Gantry/RotY                     = Ge/gantryAngle deg
d:Ge/Gantry/RotZ                     = 0.00 deg

s:Ge/Support/Parent                  = "World"
s:Ge/Support/Type                    = "Group"
d:Ge/Support/RotX                    = 0. deg
d:Ge/Support/RotY                    = -1.0 * Ge/couchAngle deg
d:Ge/Support/RotZ                    = 0. deg
d:Ge/Support/TransX                  = 0.0 mm
d:Ge/Support/TransY                  = 0.0 mm
d:Ge/Support/TransZ                  = 0.0 mm

s:Ge/DCM_to_IEC/Parent               = "Support"
s:Ge/DCM_to_IEC/Type                 = "Group"
d:Ge/DCM_to_IEC/TransX               = 0.0 mm
d:Ge/DCM_to_IEC/TransY               = 0.0 mm
d:Ge/DCM_to_IEC/TransZ               = 0.0 mm
d:Ge/DCM_to_IEC/RotX                 = 90.00 deg
d:Ge/DCM_to_IEC/RotY                 = 0.0 deg
d:Ge/DCM_to_IEC/RotZ                 = 0.0 deg

s:Ge/BeamPosition/Parent             = "Gantry"
s:Ge/BeamPosition/Type               = "Group"
d:Ge/BeamPosition/TransZ             = -500.0 mm
d:Ge/BeamPosition/TransX             = Tf/spotPositionX/Value mm
d:Ge/BeamPosition/TransY             = -1.0 * Tf/spotPositionY/Value mm
d:Ge/BeamPosition/RotX               = -1.0 * Tf/spotAngleY/Value deg
d:Ge/BeamPosition/RotY               = -1.0 * Tf/spotAngleX/Value deg
d:Ge/BeamPosition/RotZ               = 0.00 deg

##############################################
###               B  E  A  M               ###
##############################################
s:So/Field/Type                      = "Emittance"
s:So/Field/Component                 = "BeamPosition"
s:So/Field/BeamParticle              = "proton"
d:So/Field/BeamEnergy                = Tf/Energy/Value MeV
u:So/Field/BeamEnergySpread          = Tf/EnergySpread/Value
s:So/Field/Distribution              = "BiGaussian"
d:So/Field/SigmaX                    = Tf/SigmaX/Value mm
d:So/Field/SigmaY                    = Tf/SigmaY/Value mm
u:So/Field/SigmaXprime               = Tf/SigmaXprime/Value 
u:So/Field/SigmaYprime               = Tf/SigmaYprime/Value 
u:So/Field/CorrelationX              = Tf/CorrelationX/Value 
u:So/Field/CorrelationY              = Tf/CorrelationY/Value 

i:So/Field/NumberOfHistoriesInRun    = 2 * Tf/spotWeight/Value


##############################################
###       S C O R E R    S E T U P         ###
##############################################
s:Sc/Dose/Quantity                   = "DoseToMedium"
s:Sc/Dose/Component                  = "Patient"
s:Sc/Dose/IfOutputFileAlreadyExists  = "Overwrite"
#b:Sc/Dose/PreCalculateStoppingPowerRatios = "True"
#d:Sc/Dose/MinProtonEnergyForStoppingPowerRatio = 0.0 MeV
#d:Sc/Dose/MaxProtonEnergyForStoppingPowerRatio = 250.0 MeV
s:Sc/Dose/OutputFile = "vol3_output/dose"

#s:Sc/Fluence/Quantity                   = "DoseToWater"
#s:Sc/Fluence/Component                  = "Patient"
#s:Sc/Fluence/IfOutputFileAlreadyExists  = "Overwrite"
#b:Sc/Fluence/PreCalculateStoppingPowerRatios = "True"
#d:Sc/Fluence/MinProtonEnergyForStoppingPowerRatio = 0.0 MeV
#d:Sc/Fluence/MaxProtonEnergyForStoppingPowerRatio = 250.0 MeV
#s:Sc/Fluence/OutputFile = "vol3_output/fluence"

s:Sc/LET_f/Quantity                   = "ProtonLET"
s:Sc/LET_f/Component		      = "Patient"
s:Sc/LET_f/WeightBy 		      = "Track" 
s:Sc/LET_f/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/LET_f/OutputFile                 = "vol3_output/let"

##############################################
###  T  I  M  E    F  E  A  T  U  R  E  S  ###
##############################################

i:Tf/NumberOfSequentialTimes         = 285
d:Tf/TimelineStart                   = 1 s
d:Tf/TimelineEnd                     = 286 s


s:Tf/Energy/Function                 = "Step"
dv:Tf/Energy/Times                   = 285 1 2 3 4 5 6 7 8 9 10 11 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285 s
dv:Tf/Energy/Values                  = 285 91.573 91.573 91.573 91.573 91.573 91.573 91.573 91.573 91.573 91.573 91.573 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72.091 MeV

s:Tf/EnergySpread/Function           = "Step"
dv:Tf/EnergySpread/Times             = 285 1 2 3 4 5 6 7 8 9 10 11 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285 s
uv:Tf/EnergySpread/Values            = 285 1.10449 1.10449 1.10449 1.10449 1.10449 1.10449 1.10449 1.10449 1.10449 1.10449 1.10449 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1.19305 

s:Tf/XYSpread/Function               = "Step"
dv:Tf/XYSpread/Times                 = 285 1 2 3 4 5 6 7 8 9 10 11 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285 s
dv:Tf/XYSpread/Values                = 285 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 0.00000 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0.00000 mm

s:Tf/spotPositionX/Function          = "Step"
dv:Tf/spotPositionX/Times            = 285 1 2 3 4 5 6 7 8 9 10 11 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285 s
dv:Tf/spotPositionX/Values           = 285 -10.27 -10.27 -10.27 -10.27 -6.85 -6.85 -6.85 -6.85 -6.85 -6.85 -6.85 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8.00 mm
s:Tf/spotAngleX/Function          = "Step"
dv:Tf/spotAngleX/Times            = 285 1 2 3 4 5 6 7 8 9 10 11 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285 s

dv:Tf/spotAngleX/Values           = 285 -0.392 -0.392 -0.392 -0.392 -0.262 -0.262 -0.262 -0.262 -0.262 -0.262 -0.262 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0.306 deg

s:Tf/spotPositionY/Function          = "Step"
dv:Tf/spotPositionY/Times            = 285 1 2 3 4 5 6 7 8 9 10 11 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285 s
dv:Tf/spotPositionY/Values           = 285 -10.46 -6.27 -2.09 2.09 12.55 8.36 4.18 -0.00 -4.18 -8.36 -12.55 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9.70 mm
s:Tf/spotAngleY/Function          = "Step"
dv:Tf/spotAngleY/Times            = 285 1 2 3 4 5 6 7 8 9 10 11 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285 s

dv:Tf/spotAngleY/Values           = 285 -0.291 -0.174 -0.058 0.058 0.349 0.233 0.116 -0.000 -0.116 -0.233 -0.349 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0.270 deg

s:Tf/SigmaX/Function               = "Step"
dv:Tf/SigmaX/Times                 = 285 1 2 3 4 5 6 7 8 9 10 11 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285 s
dv:Tf/SigmaX/Values                = 285 3.97261 3.97261 3.97261 3.97261 3.97261 3.97261 3.97261 3.97261 3.97261 3.97261 3.97261 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4.45551 mm

s:Tf/SigmaY/Function               = "Step"
dv:Tf/SigmaY/Times                 = 285 1 2 3 4 5 6 7 8 9 10 11 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285 s
dv:Tf/SigmaY/Values                = 285 3.28164 3.28164 3.28164 3.28164 3.28164 3.28164 3.28164 3.28164 3.28164 3.28164 3.28164 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3.61709 mm

s:Tf/SigmaXprime/Function               = "Step"
dv:Tf/SigmaXprime/Times                 = 285 1 2 3 4 5 6 7 8 9 10 11 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285 s
uv:Tf/SigmaXprime/Values                = 285 0.00447 0.00447 0.00447 0.00447 0.00447 0.00447 0.00447 0.00447 0.00447 0.00447 0.00447 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0.00604 

s:Tf/SigmaYprime/Function               = "Step"
dv:Tf/SigmaYprime/Times                 = 285 1 2 3 4 5 6 7 8 9 10 11 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285 s
uv:Tf/SigmaYprime/Values                = 285 0.00388 0.00388 0.00388 0.00388 0.00388 0.00388 0.00388 0.00388 0.00388 0.00388 0.00388 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0.00554 

s:Tf/CorrelationX/Function               = "Step"
dv:Tf/CorrelationX/Times                 = 285 1 2 3 4 5 6 7 8 9 10 11 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285 s
uv:Tf/CorrelationX/Values                = 285 0.37483 0.37483 0.37483 0.37483 0.37483 0.37483 0.37483 0.37483 0.37483 0.37483 0.37483 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0.30128 

s:Tf/CorrelationY/Function               = "Step"
dv:Tf/CorrelationY/Times                 = 285 1 2 3 4 5 6 7 8 9 10 11 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285 s
uv:Tf/CorrelationY/Values                = 285 0.93876 0.93876 0.93876 0.93876 0.93876 0.93876 0.93876 0.93876 0.93876 0.93876 0.93876 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0.73736 

s:Tf/spotWeight/Function             = "Step"
dv:Tf/spotWeight/Times               = 285 1 2 3 4 5 6 7 8 9 10 11 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285 s
iv:Tf/spotWeight/Values              = 285 1791 13899 41043 17403 1677 8115 30177 42645 16692 35454 7668 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1437 


#Total number of particles is 2.356720e+06


#Total number of particles scaled down by 1.666667e+03

s:Gr/ViewA/Type             = "OpenGL"
d:Gr/ViewA/Theta       = 45. deg
d:Gr/ViewA/Phi         = 45. deg

#Ts/UseQt = "True"


