##############################################
###           V A R I A B L E S            ###
##############################################
includeFile                          = HUtoMaterialSchneider.txt

d:Rt/Plan/IsoCenterX                 = 0.00 mm
d:Rt/Plan/IsoCenterY                 = -140.00 mm
d:Rt/Plan/IsoCenterZ                 = -10.00 mm
d:Ge/snoutPosition                   = Tf/snoutPos/value mm #Note: Snout + RS depth + Air gap
d:Ge/gantryAngle                     = Tf/gantryAng/value deg
d:Ge/couchAngle                      = Tf/couchAng/value deg
dc:Ge/Patient/DicomOriginX           = 0.00 mm
dc:Ge/Patient/DicomOriginY           = 0.00 mm
dc:Ge/Patient/DicomOriginZ           = 0.00 mm


##############################################
###            G E O M E T R Y             ###
##############################################
s:Ge/Patient/Parent                  = "World"
s:Ge/Patient/Type                    = "TsDicomPatient"
s:Ge/Patient/DicomDirectory          = "dcm"
sv:Ge/Patient/DicomModalityTags      = 1 "CT"
s:Ge/Patient/CloneRTDoseGridFrom     = Ge/Patient/DicomDirectory + "/RD.1.2.246.352.71.7.840015079752.335536.20210203160823.dcm"
d:Ge/Patient/TransX                  = Ge/Patient/DicomOriginX - Rt/Plan/IsoCenterX mm
d:Ge/Patient/TransY                  = Ge/Patient/DicomOriginY - Rt/Plan/IsoCenterY mm
d:Ge/Patient/TransZ                  = Ge/Patient/DicomOriginZ - Rt/Plan/IsoCenterZ mm
d:Ge/Patient/RotX                    = 0.00 deg
d:Ge/Patient/RotY                    = 0.00 deg
d:Ge/Patient/RotZ                    = 0.00 deg
s:Ge/Patient/Material		     = "G4_WATER"
s:Ge/Patient/HUtoMaterialConversionMethod = "Schneider"
#sv:Ge/Patient/ColorByRTStructNames = 2 "Gel" "SolidWater"
#sv:Ge/Patient/ColorByRTStructColors = 2 "Green" "Blue"
#iv:Ge/Patient/ShowSpecificSlicesZ = 1 -1


s:Ge/Gantry/Parent                   = "DCM_to_IEC"
s:Ge/Gantry/Type                     = "Group"
d:Ge/Gantry/TransX                   = 0.00 mm
d:Ge/Gantry/TransY                   = 0.00 mm
d:Ge/Gantry/TransZ                   = 0.00 mm
d:Ge/Gantry/RotX                     = 0.00 deg
d:Ge/Gantry/RotY                     = Ge/gantryAngle deg
d:Ge/Gantry/RotZ                     = 0.00 deg

s:Ge/Support/Parent                  = "World"
s:Ge/Support/Type                    = "Group"
d:Ge/Support/RotX                    = 0. deg
d:Ge/Support/RotY                    = -1.0 * Ge/couchAngle deg
d:Ge/Support/RotZ                    = 0. deg
d:Ge/Support/TransX                  = 0.0 mm
d:Ge/Support/TransY                  = 0.0 mm
d:Ge/Support/TransZ                  = 0.0 mm

s:Ge/DCM_to_IEC/Parent               = "Support"
s:Ge/DCM_to_IEC/Type                 = "Group"
d:Ge/DCM_to_IEC/TransX               = 0.0 mm
d:Ge/DCM_to_IEC/TransY               = 0.0 mm
d:Ge/DCM_to_IEC/TransZ               = 0.0 mm
d:Ge/DCM_to_IEC/RotX                 = 90.00 deg
d:Ge/DCM_to_IEC/RotY                 = 0.0 deg
d:Ge/DCM_to_IEC/RotZ                 = 0.0 deg

s:Ge/BeamPosition/Parent             = "Gantry"
s:Ge/BeamPosition/Type               = "Group"
d:Ge/BeamPosition/TransZ             = -1.0 * Ge/snoutPosition mm
d:Ge/BeamPosition/TransX             = Tf/spotPositionX/Value mm
d:Ge/BeamPosition/TransY             = -1.0 * Tf/spotPositionY/Value mm
d:Ge/BeamPosition/RotX               = 0.00 deg
d:Ge/BeamPosition/RotY               = 0.00 deg
d:Ge/BeamPosition/RotZ               = 0.00 deg


#### Graphics #####
i:Gr/ViewA/WindowSizeX = 900
i:Gr/ViewA/WindowSizeY = 900
#i:Gr/ShowOnlyOutlineIfVoxelCountExceeds = 10000
s:Gr/ViewA/Projection       = "Perspective"
s:Gr/ViewA/Type        = "OpenGL"
u:Gr/ViewA/Zoom                             = 15
Ts/UseQt = "True"
Ge/QuitIfOverlapDetected = "False"
b:Ge/Patient/IgnoreInconsistentFrameOfReferenceUID = "True"


##############################################
###               B  E  A  M               ###
##############################################
s:So/Field/Type                      = "Beam"
s:So/Field/Component                 = "BeamPosition"
s:So/Field/BeamParticle              = "proton"
d:So/Field/BeamEnergy                = Tf/Energy/Value MeV
u:So/Field/BeamEnergySpread          = Tf/EnergySpread/Value
s:So/Field/BeamPositionDistribution  = "Gaussian"
s:So/Field/BeamPositionCutoffShape   = "Rectangle"
d:So/Field/BeamPositionCutoffX       = 5.00 cm
d:So/Field/BeamPositionCutoffY       = 5.00 cm
d:So/Field/BeamPositionSpreadX       = Tf/XYSpread/Value mm
d:So/Field/BeamPositionSpreadY       = Tf/XYSpread/Value mm
s:So/Field/BeamAngularDistribution   = "Gaussian"
d:So/Field/BeamAngularCutoffX        = 90. deg
d:So/Field/BeamAngularCutoffY        = 90. deg
d:So/Field/BeamAngularSpreadX        = 0.0001 rad
d:So/Field/BeamAngularSpreadY        = 0.0001 rad
s:So/Field/BeamXYDistribution        = "Gaussian"
d:So/Field/BeamStandardDeviationX    = 0.0 mm
d:So/Field/BeamStandardDeviationY    = 0.0 mm

i:So/Field/NumberOfHistoriesInRun    = Tf/spotWeight/Value


##############################################
###        T I M E  F E A T U R E S        ###
##############################################
i:Tf/NumberOfSequentialTimes     = 830
d:Tf/TimelineStart               = 1 s
d:Tf/TimelineEnd                 = 831 s

s:Tf/gantryAng/Function                = "Step"
dv:Tf/gantryAng/Times                  = 1 1 s
dv:Tf/gantryAng/values                 = 1 0.00 deg

s:Tf/couchAng/Function                = "Step"
dv:Tf/couchAng/Times                  = 1 1 s
dv:Tf/couchAng/values                 = 1 0.00 deg

s:Tf/snoutPos/Function                = "Step"
dv:Tf/snoutPos/Times                  = 1 1 s
dv:Tf/snoutPos/values                 = 1 350.00 mm

s:Tf/Energy/Function                 = "Step"
dv:Tf/Energy/Times                   = 830 1 2 3 4 5 6 7 8 9 10 11 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830 s

dv:Tf/Energy/Values                  = 830 163.238 163.238 163.238 163.238 163.238 163.238 163.238 163.238 163.238 163.238 163.238 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146.840 MeV

s:Tf/EnergySpread/Function           = "Step"
dv:Tf/EnergySpread/Times             = 830 1 2 3 4 5 6 7 8 9 10 11 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830 s

uv:Tf/EnergySpread/Values            = 830 0.68515 0.68515 0.68515 0.68515 0.68515 0.68515 0.68515 0.68515 0.68515 0.68515 0.68515 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0.72980 

s:Tf/XYSpread/Function               = "Step"
dv:Tf/XYSpread/Times                 = 830 1 2 3 4 5 6 7 8 9 10 11 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830 s

dv:Tf/XYSpread/Values                = 830 3.96181 3.96181 3.96181 3.96181 3.96181 3.96181 3.96181 3.96181 3.96181 3.96181 3.96181 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4.10258 mm

s:Tf/spotWeight/Function             = "Step"
dv:Tf/spotWeight/Times               = 830 1 2 3 4 5 6 7 8 9 10 11 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830 s

iv:Tf/spotWeight/Values              = 830 11560 7569 13424 11598 8774 10223 8359 6627 8378 9112 9866 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6591 

#Total number of particles is 14824401


s:Tf/spotPositionX/Function          = "Step"
dv:Tf/spotPositionX/Times            = 830 1 2 3 4 5 6 7 8 9 10 11 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830 s

dv:Tf/spotPositionX/Values           = 830 -16.6 -16.6 -16.6 -16.6 -16.6 -16.6 -16.6 -16.6 -16.6 -16.6 -16.6 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18.2 mm

s:Tf/spotPositionY/Function          = "Step"
dv:Tf/spotPositionY/Times            = 830 1 2 3 4 5 6 7 8 9 10 11 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830 s

dv:Tf/spotPositionY/Values           = 830 -28.2 -23.5 -18.8 -14.1 -9.4 -4.7 -0.0 4.7 9.4 14.1 18.8 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-20.7 mm
