##############################################
###           V A R I A B L E S            ###
##############################################
includeFile                          = HUtoMaterialSchneider.txt
includeFile                          = DosimeterChemComp.txt

d:Rt/Plan/IsoCenterX                 = 0.00 mm
d:Rt/Plan/IsoCenterY                 = -140.00 mm
d:Rt/Plan/IsoCenterZ                 = -10.00 mm
d:Ge/snoutPosition                   = 350.00 mm #Note: Snout + RS depth + Air gap
d:Ge/gantryAngle                     = 0.00 deg
d:Ge/couchAngle                      = 0.00 deg
dc:Ge/Patient/DicomOriginX           = 0.00 mm
dc:Ge/Patient/DicomOriginY           = 0.00 mm
dc:Ge/Patient/DicomOriginZ           = 0.00 mm


##############################################
###         T O P A S    S E T U P         ###
##############################################
i:Ts/ShowHistoryCountAtInterval         = 10000
i:Ts/NumberOfThreads                    = 0 # 0 for using all cores, -1 for all but one
b:Ts/DumpParameters                     = "False"

##############################################
###         W O R L D    S E T U P         ###
##############################################
s:Ge/World/Type            = "TsBox"
s:Ge/World/Material        = "Air"
d:Ge/World/HLX             = 90. cm
d:Ge/World/HLY             = 90. cm
d:Ge/World/HLZ             = 90. cm
b:Ge/World/Invisible       = "True"


##############################################
###            G E O M E T R Y             ###
##############################################

##### Gel overwrite ######################
s:Ge/Gel/Parent               = "World"
s:Ge/Gel/Type                 = "TsBox"
d:Ge/Gel/HLX                  = 25.00 mm
d:Ge/Gel/HLY                  = 25.00 mm
d:Ge/Gel/HLZ                  = 35.00 mm
i:Ge/Gel/Xbins                = 1
i:Ge/Gel/Ybins                = 1
i:Ge/Gel/Zbins                = 1
b:Ge/Gel/isParallel           = "True"
d:Ge/Gel/TransX               = Ge/Patient/DicomOriginX - Rt/Plan/IsoCenterX mm
d:Ge/Gel/TransY               = -3 mm
d:Ge/Gel/TransZ               = Ge/Patient/DicomOriginZ - Rt/Plan/IsoCenterz mm
d:Ge/Gel/RotX                 = 0.0 deg
d:Ge/Gel/RotY                 = 0.0 deg
d:Ge/Gel/RotZ                 = 0.0 deg
s:Ge/Gel/Material	      = "FlexDos"
s:Ge/Gel/DrawingStyle	         = "Solid"
s:Ge/Gel/Color	         = "Blue"

#### Pacemaker wire ####
s:Ge/pacemaker_inner/Parent                  = "World"
s:Ge/pacemaker_inner/Type                    = "TsCylinder"
d:Ge/pacemaker_inner/Rmin                    = 0.9 mm
d:Ge/pacemaker_inner/Rmax                    = 1.1 mm
d:Ge/pacemaker_inner/HL                      = 35 mm
b:Ge/pacemaker_inner/isParallel              = "True"
i:Ge/pacemaker_inner/RBins                   = 1
i:Ge/pacemaker_inner/PhiBins                 = 1
i:Ge/pacemaker_inner/ZBins                   = 1
d:Ge/pacemaker_inner/TransX                  = Ge/Patient/DicomOriginX - Rt/Plan/IsoCenterX mm
d:Ge/pacemaker_inner/TransY                  = -3 mm
d:Ge/pacemaker_inner/TransZ                  = Ge/Patient/DicomOriginZ - Rt/Plan/IsoCenterZ mm
d:Ge/pacemaker_inner/RotX                    = 0.00 deg
d:Ge/pacemaker_inner/RotY                    = 0.00 deg
d:Ge/pacemaker_inner/RotZ                    = 0.00 deg
s:Ge/pacemaker_inner/Color                   = "Blue"
s:Ge/pacemaker_inner/Material	= "Lead"

s:Ge/pacemaker_outer/Parent                  = "World"
s:Ge/pacemaker_outer/Type                    = "TsCylinder"
d:Ge/pacemaker_outer/Rmin                    = 0.0 mm
d:Ge/pacemaker_outer/Rmax                    = 0.9 mm
d:Ge/pacemaker_outer/HL                      = 35 mm
b:Ge/pacemaker_outer/isParallel              = "True"
i:Ge/pacemaker_outer/RBins                   = 1
i:Ge/pacemaker_outer/PhiBins                 = 1
i:Ge/pacemaker_outer/ZBins                   = 1
d:Ge/pacemaker_outer/TransX                  = Ge/Patient/DicomOriginX - Rt/Plan/IsoCenterX mm
d:Ge/pacemaker_outer/TransY                  = -3 mm
d:Ge/pacemaker_outer/TransZ                  = Ge/Patient/DicomOriginZ - Rt/Plan/IsoCenterZ mm
d:Ge/pacemaker_outer/RotX                    = 0.00 deg
d:Ge/pacemaker_outer/RotY                    = 0.00 deg
d:Ge/pacemaker_outer/RotZ                    = 0.00 deg
s:Ge/pacemaker_outer/Color                   = "Green"
s:Ge/pacemaker_outer/Material		     = "G4_WATER"

sv:Ph/Default/LayeredMassGeometryWorlds = 4 "Gel" "pacemaker_inner" "pacemaker_outer" "RS"

##### Water slab ######################
s:Ge/water1/Parent               = "World"
s:Ge/water1/Type                 = "TsBox"
d:Ge/water1/HLX                  = 100 mm
d:Ge/water1/HLY                  = 37.20 mm
d:Ge/water1/HLZ                  = 100 mm
i:Ge/water1/Xbins                = 1
i:Ge/water1/Ybins                = 1
i:Ge/water1/Zbins                = 1
d:Ge/water1/TransX               = Ge/Patient/DicomOriginX - Rt/Plan/IsoCenterX mm
d:Ge/water1/TransY               = 60 mm
d:Ge/water1/TransZ               = Ge/Patient/DicomOriginZ - Rt/Plan/IsoCenterz mm
d:Ge/water1/RotX                 = 0.0 deg
d:Ge/water1/RotY                 = 0.0 deg
d:Ge/water1/RotZ                 = 0.0 deg
s:Ge/water1/Material	         = "G4_WATER"

s:Ge/water2/Parent               = "World"
s:Ge/water2/Type                 = "TsBox"
d:Ge/water2/HLX                  = 100 mm
d:Ge/water2/HLY                  = 25 mm
d:Ge/water2/HLZ                  = 100 mm
i:Ge/water2/Xbins                = 1
i:Ge/water2/Ybins                = 1
i:Ge/water2/Zbins                = 1
d:Ge/water2/TransX               = -125 mm
d:Ge/water2/TransY               = -3 mm
d:Ge/water2/TransZ               = Ge/Patient/DicomOriginZ - Rt/Plan/IsoCenterz mm
d:Ge/water2/RotX                 = 0.0 deg
d:Ge/water2/RotY                 = 0.0 deg
d:Ge/water2/RotZ                 = 0.0 deg
s:Ge/water2/Material	         = "G4_WATER"

s:Ge/water3/Parent               = "World"
s:Ge/water3/Type                 = "TsBox"
d:Ge/water3/HLX                  = 100 mm
d:Ge/water3/HLY                  = 25 mm
d:Ge/water3/HLZ                  = 100 mm
i:Ge/water3/Xbins                = 1
i:Ge/water3/Ybins                = 1
i:Ge/water3/Zbins                = 1
d:Ge/water3/TransX               = 125 mm
d:Ge/water3/TransY               = -3 mm
d:Ge/water3/TransZ               = Ge/Patient/DicomOriginZ - Rt/Plan/IsoCenterz mm
d:Ge/water3/RotX                 = 0.0 deg
d:Ge/water3/RotY                 = 0.0 deg
d:Ge/water3/RotZ                 = 0.0 deg
s:Ge/water3/Material	         = "G4_WATER"

s:Ge/water4/Parent               = "World"
s:Ge/water4/Type                 = "TsBox"
d:Ge/water4/HLX                  = 100 mm
d:Ge/water4/HLY                  = 37.20 mm
d:Ge/water4/HLZ                  = 100 mm
i:Ge/water4/Xbins                = 1
i:Ge/water4/Ybins                = 1
i:Ge/water4/Zbins                = 1
d:Ge/water4/TransX               = Ge/Patient/DicomOriginX - Rt/Plan/IsoCenterX mm
d:Ge/water4/TransY               = -66 mm
d:Ge/water4/TransZ               = Ge/Patient/DicomOriginZ - Rt/Plan/IsoCenterz mm
d:Ge/water4/RotX                 = 0.0 deg
d:Ge/water4/RotY                 = 0.0 deg
d:Ge/water4/RotZ                 = 0.0 deg
s:Ge/water4/Material	         = "G4_WATER"


#### Graphics #####
s:Gr/ViewA/Type        = "OpenGL"
i:Gr/ViewA/WindowSizeX = 900
i:Gr/ViewA/WindowSizeY = 900
d:Gr/ViewA/Theta       =90 deg
d:Gr/ViewA/Phi         = 0 deg
#Ts/UseQt = "True"
#Ge/QuitIfOverlapDetected = "False"
#b:Ge/Patient/IgnoreInconsistentFrameOfReferenceUID = "True"
b:Ts/PauseBeforeQuit = "True"


s:Ge/Gantry/Parent                   = "DCM_to_IEC"
s:Ge/Gantry/Type                     = "Group"
d:Ge/Gantry/TransX                   = 0.00 mm
d:Ge/Gantry/TransY                   = 0.00 mm
d:Ge/Gantry/TransZ                   = 0.00 mm
d:Ge/Gantry/RotX                     = 0.00 deg
d:Ge/Gantry/RotY                     = Ge/gantryAngle deg
d:Ge/Gantry/RotZ                     = 0.00 deg

s:Ge/Support/Parent                  = "World"
s:Ge/Support/Type                    = "Group"
d:Ge/Support/RotX                    = 0. deg
d:Ge/Support/RotY                    = -1.0 * Ge/couchAngle deg
d:Ge/Support/RotZ                    = 0. deg
d:Ge/Support/TransX                  = 0.0 mm
d:Ge/Support/TransY                  = 0.0 mm
d:Ge/Support/TransZ                  = 0.0 mm

s:Ge/DCM_to_IEC/Parent               = "Support"
s:Ge/DCM_to_IEC/Type                 = "Group"
d:Ge/DCM_to_IEC/TransX               = 0.0 mm
d:Ge/DCM_to_IEC/TransY               = 0.0 mm
d:Ge/DCM_to_IEC/TransZ               = 0.0 mm
d:Ge/DCM_to_IEC/RotX                 = 90.00 deg
d:Ge/DCM_to_IEC/RotY                 = 0.0 deg
d:Ge/DCM_to_IEC/RotZ                 = 0.0 deg

s:Ge/BeamPosition/Parent             = "Gantry"
s:Ge/BeamPosition/Type               = "Group"
d:Ge/BeamPosition/TransZ             = -1.0 * Ge/snoutPosition mm
d:Ge/BeamPosition/TransX             = Tf/spotPositionX/Value mm
d:Ge/BeamPosition/TransY             = -1.0 * Tf/spotPositionY/Value mm
d:Ge/BeamPosition/RotX               = 0.00 deg
d:Ge/BeamPosition/RotY               = 0.00 deg
d:Ge/BeamPosition/RotZ               = 0.00 deg

#### Range shifter ####
s:Ge/RS/Parent                       = "BeamPosition"
s:Ge/RS/Type                         = "TsBox"
s:Ge/RS/Material                     = "Lexan"
b:Ge/RS/Isparallel                   = "True"
d:Ge/RS/HLX                          = 40.00 mm
d:Ge/RS/HLY                          = 40.00 mm
d:Ge/RS/HLZ                          = 25.00 mm
s:Ge/RS/Color                        = "Orange"
d:Ge/RS/TransZ                       = 30.00 mm

########################################
########## SCORERS #####################
########################################

# Scorer 1 #########################
s:Ge/Scorer1/Parent               = "World"
s:Ge/Scorer1/Type                 = "TsBox"
d:Ge/Scorer1/HLX                  = 25.00 mm
d:Ge/Scorer1/HLY                  = 25.00 mm
d:Ge/Scorer1/HLZ                  = 35.00 mm
i:Ge/Scorer1/Xbins                = 100
i:Ge/Scorer1/Ybins                = 100
i:Ge/Scorer1/Zbins                = 140
b:Ge/Scorer1/isParallel           = "True"
d:Ge/Scorer1/TransX               = Ge/Patient/DicomOriginX - Rt/Plan/IsoCenterX mm
d:Ge/Scorer1/TransY               = -3 mm
d:Ge/Scorer1/TransZ               = Ge/Patient/DicomOriginZ - Rt/Plan/IsoCenterz mm
d:Ge/Scorer1/RotX                 = 0.0 deg
d:Ge/Scorer1/RotY                 = 0.0 deg
d:Ge/Scorer1/RotZ                 = 0.0 deg


##############################################
###               B  E  A  M               ###
##############################################
s:So/Field/Type                      = "Beam"
s:So/Field/Component                 = "BeamPosition"
s:So/Field/BeamParticle              = "proton"
d:So/Field/BeamEnergy                = Tf/Energy/Value MeV
u:So/Field/BeamEnergySpread          = Tf/EnergySpread/Value
s:So/Field/BeamPositionDistribution  = "Gaussian"
s:So/Field/BeamPositionCutoffShape   = "Rectangle"
d:So/Field/BeamPositionCutoffX       = 5.00 cm
d:So/Field/BeamPositionCutoffY       = 5.00 cm
d:So/Field/BeamPositionSpreadX       = Tf/XYSpread/Value mm
d:So/Field/BeamPositionSpreadY       = Tf/XYSpread/Value mm
s:So/Field/BeamAngularDistribution   = "Gaussian"
d:So/Field/BeamAngularCutoffX        = 90. deg
d:So/Field/BeamAngularCutoffY        = 90. deg
d:So/Field/BeamAngularSpreadX        = 0.0001 rad
d:So/Field/BeamAngularSpreadY        = 0.0001 rad
s:So/Field/BeamXYDistribution        = "Gaussian"
d:So/Field/BeamStandardDeviationX    = 0.0 mm
d:So/Field/BeamStandardDeviationY    = 0.0 mm

i:So/Field/NumberOfHistoriesInRun    = Tf/spotWeight/Value


##############################################
###       S C O R E R    S E T U P         ###
##############################################
s:Ge/ScoringBox/Parent               = "World"
s:Ge/ScoringBox/Type                 = "TsBox"
d:Ge/ScoringBox/HLX                  = 37.00 mm
d:Ge/ScoringBox/HLY                  = 37.00 mm
d:Ge/ScoringBox/HLZ                  = 37.50 mm
i:Ge/ScoringBox/Xbins                = 296 
i:Ge/ScoringBox/Ybins                = 296 
i:Ge/ScoringBox/Zbins                = 300 
b:Ge/ScoringBox/isParallel           = "True"
d:Ge/ScoringBox/TransX               = Ge/Patient/DicomOriginX - Rt/Plan/IsoCenterX mm
d:Ge/ScoringBox/TransY               = Ge/Patient/DicomOriginY - Rt/Plan/IsoCenterY mm
d:Ge/ScoringBox/TransZ               = Ge/Patient/DicomOriginZ - Rt/Plan/IsoCenterZ mm
d:Ge/ScoringBox/RotX                 = 0.0 deg
d:Ge/ScoringBox/RotY                 = 0.0 deg
d:Ge/ScoringBox/RotZ                 = 0.0 deg

##############################################
###             DOSE AND LET               ###
##############################################
s:Sc/DoseAtPhantom/Quantity          = "DoseToMedium"
s:Sc/DoseAtPhantom/Component         = "ScoringBox"
s:Sc/DoseAtPhantom/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/LETatPhantom/Quantity           = "ProtonLET"
s:Sc/LETatPhantom/Component          = "ScoringBox"
d:Sc/LETatPhantom/MaxScoredLET       = 100 MeV/mm/(g/cm3)
d:Ph/Default/CutForElectron          = 0.25 mm
s:Sc/LETatPhantom/IfOutputFileAlreadyExists = "Overwrite"

##############################################
###             DICOM EXPORT               ###
##############################################
s:Sc/Dose/Quantity                   = "DoseToMedium"
s:Sc/Dose/Component                  = "ScoringBox"
s:Sc/Dose/OutputType                 = "DICOM"
b:Sc/Dose/DICOMOutput32BitsPerPixel  = "F"
s:Sc/Dose/OutputFile                 = "Dose_dicom"
s:Sc/Dose/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/LET/Quantity           = "ProtonLET"
s:Sc/LET/Component          = "ScoringBox"
d:Sc/LET/MaxScoredLET       = 100 MeV/mm/(g/cm3)
s:Sc/LET/OutputType                 = "DICOM"
b:Sc/LET/DICOMOutput32BitsPerPixel  = "F"
s:Sc/LET/OutputFile                 = "LET_dicom"
s:Sc/LET/IfOutputFileAlreadyExists = "Overwrite"


##############################################
###  T  I  M  E    F  E  A  T  U  R  E  S  ###
##############################################

i:Tf/NumberOfSequentialTimes         = 830
d:Tf/TimelineStart                   = 1 s
d:Tf/TimelineEnd                     = 831 s


s:Tf/Energy/Function                 = "Step"
dv:Tf/Energy/Times                   = 830 1 2 3 4 5 6 7 8 9 10 11 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830 s
dv:Tf/Energy/Values                  = 830 163.238 163.238 163.238 163.238 163.238 163.238 163.238 163.238 163.238 163.238 163.238 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146.840 MeV

s:Tf/EnergySpread/Function           = "Step"
dv:Tf/EnergySpread/Times             = 830 1 2 3 4 5 6 7 8 9 10 11 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830 s
uv:Tf/EnergySpread/Values            = 830 0.68515 0.68515 0.68515 0.68515 0.68515 0.68515 0.68515 0.68515 0.68515 0.68515 0.68515 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0.72980 

s:Tf/XYSpread/Function               = "Step"
dv:Tf/XYSpread/Times                 = 830 1 2 3 4 5 6 7 8 9 10 11 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830 s
dv:Tf/XYSpread/Values                = 830 3.96181 3.96181 3.96181 3.96181 3.96181 3.96181 3.96181 3.96181 3.96181 3.96181 3.96181 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4.10258 mm

s:Tf/spotPositionX/Function          = "Step"
dv:Tf/spotPositionX/Times            = 830 1 2 3 4 5 6 7 8 9 10 11 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830 s
dv:Tf/spotPositionX/Values           = 830 -16.6 -16.6 -16.6 -16.6 -16.6 -16.6 -16.6 -16.6 -16.6 -16.6 -16.6 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18.2 mm

s:Tf/spotPositionY/Function          = "Step"
dv:Tf/spotPositionY/Times            = 830 1 2 3 4 5 6 7 8 9 10 11 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830 s
dv:Tf/spotPositionY/Values           = 830 -28.2 -23.5 -18.8 -14.1 -9.4 -4.7 -0.0 4.7 9.4 14.1 18.8 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-20.7 mm

s:Tf/spotWeight/Function             = "Step"
dv:Tf/spotWeight/Times               = 830 1 2 3 4 5 6 7 8 9 10 11 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830 s
iv:Tf/spotWeight/Values              = 830 11560 7569 13424 11598 8774 10223 8359 6627 8378 9112 9866 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6591 

#Total number of particles is 14824401

